PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial 1
  keyboardBackend = ioHub
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Routines
  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10.0, 10.0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast [set every repeat] = level
      mask = circle
      pos [set every repeat] = $location
      sf = 5
      size = (1, 1)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random()>0.5: # 50:50 probability
            location = (-0.2, 0)
            corrAns = 'left'
        else:
            location = (0.2,0)
            corrAns = 'right'
      Begin Routine:
        if random()>0.5: # 50:50 probability
            location = (-0.2, 0)
            corrAns = 'left'
        else:
            location = (0.2,0)
            corrAns = 'right'
Flow
  LoopInitiator trials loopType="MultiStairHandler"
    conditions = [{'label': 'cont', 'startVal': 0.05, 'stepSizes': [0.01, 0.01, 0.005, 0.005], 'maxVal': 1, 'minVal': 0}]
    conditionsFile = C:/Users/student/Downloads/conditions_staircase.xlsx
    loopType = interleaved staircases
    nReps = 10
    stairType = simple
    switchMethod = random
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    Routine trial
  LoopTerminator trials
